PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = faceHouseBlocks
  Screen = 1
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Routines
  Routine singleStim
  Routine recovery
  Routine interBlockInterv
Flow
  LoopInitiator selectEpochs loopType="TrialHandler"
    conditionsFile = source/3_17_fMRI/code/epochs.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'condsFile': u'houses1.xlsx'},
      {u'condsFile': u'faces1.xlsx'}]
    Routine interBlockInterv
    LoopInitiator epoch loopType="TrialHandler"
      conditionsFile = $epochFile
      loopType = random
      nReps = 1
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      Routine singleStim
    LoopTerminator epoch
  LoopTerminator selectEpochs
