PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'Eye tracker config': u'iohub_config.yaml', u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1280, 720]
  Full-screen window = True
  Show mouse = True
  Show info dlg = False
  expName = visualSearch_ET
  Screen = 2
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Routines
  Routine fixation
    PolygonComponent fixation_target
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (20, 20)
      fillColor = $[-1,-1,1]
      units = pix
      nVertices = 99
      lineColor = $[-1,-1,1]
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    CodeComponent get_eye_pos
      Begin Routine:
        eye_tracker.setRecordingState(True)
        missed_samples = 0
        fixation_started = False
      End Routine:
        print('Missed ' + str(missed_samples) + ' samples during fixation.')
      Each Frame:
        gaze_pos = eye_tracker.getPosition()

        if type(gaze_pos) not in [list, tuple]:
            missed_samples = missed_samples + 1
        else:
            gaze_x, gaze_y = gaze_pos
            distance_from_centre = sqrt(gaze_x ** 2 + gaze_y ** 2)
            if distance_from_centre <= 30:
                if not fixation_started:
                    fixation_started = True
                    fixation_start_time = t
                elif t - fixation_start_time > 0.3:
                    continueRoutine = False
            else:
                fixation_started = False
    PolygonComponent gaze_position
      pos [set every frame] = (gaze_x, gaze_y)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (30, 30)
      units = pix
      nVertices = 99
      lineColor = $[-1,-1,1]
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  Routine trial
    MouseComponent mouse
      timeRelativeTo = routine
      forceEndRoutineOnPress = never
      startVal [time (s)] = 0.0
      saveMouseState = final
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    CodeComponent code
      Begin Experiment:
        x_pos = [-400, -300, -200, -100, 0, 100, 200, 300, 400]
        y_pos = [-200, -150, -100, -50, 0, 50, 100, 150, 200]

        #x_pos = [-0.4, -0.3, -0.2, -0.1, 0.0, 0.1, 0.2, 0.3, 0.4]
        #y_pos = [-0.4, -0.3, -0.2, -0.1, 0.0, 0.1, 0.2, 0.3, 0.4]

        #correct_sound = sound.Sound(u'A', secs = 0.4)
        #correct_sound.setVolume(1)
        #wrong_sound = sound.Sound(u'D', secs = 0.4)
      Begin Routine:
        shuffle(x_pos)
        shuffle(y_pos)

        missed_samples = 0
      End Routine:
        eye_tracker.setRecordingState(False)
        win.getMovieFrame()
        win.saveMovieFrames('data/ pngs/search_{}.png'.format(trials.thisN), codec='png')
        print('Missed ' + str(missed_samples) + ' samples during trial.')
      End Experiment:
        eye_tracker.setConnectionStae(False)
      Each Frame:
        gaze_pos = eye_tracker.getPosition()

        if type(gaze_pos) in [list, tuple]:
            gaze_x, gaze_y = gaze_pos
        else:
            missed_samples = missed_samples + 1


        keys = event.getKeys()
        if keys: # avoid the Midas touch
            if 'escape' in keys:
                core.quit()
            elif target.contains(gaze_x, gaze_y):
                thisExp.addData('RT', t)
                continueRoutine = False
            else:
                for distractor in [distract_1, distract_2, distract_3, distract_4, distract_5, distract_6, distract_7, distract_8]:
                    if distractor.contains(gaze_x, gaze_y) and distractor.opacity > 0.99:
                        pass#wrong_sound.play()
    PolygonComponent target
      pos [set every repeat] = (x_pos[0], y_pos[0])
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (20,20)
      fillColor [set every repeat] = $target_color
      units = pix
      nVertices = 6
      ori = 30
      lineWidth = 0
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    PolygonComponent distract_1
      pos [set every repeat] = (x_pos[1], y_pos[1])
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (20,20)
      fillColor = $[-1,-1,-1]
      units = pix
      nVertices = 5
      opacity [set every repeat] = opacity_1
      interpolate = nearest
      lineWidth = 0
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    PolygonComponent distract_2
      pos [set every repeat] = (x_pos[2], y_pos[2])
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (20,20)
      fillColor = $[-1,-1,-1]
      units = pix
      nVertices = 5
      opacity [set every repeat] = opacity_2
      interpolate = nearest
      lineWidth = 0
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    PolygonComponent distract_3
      pos [set every repeat] = (x_pos[3], y_pos[3])
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (20,20)
      fillColor = $[-1,-1,-1]
      units = pix
      nVertices = 5
      opacity [set every repeat] = opacity_3
      interpolate = nearest
      lineWidth = 0
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    PolygonComponent distract_4
      pos [set every repeat] = (x_pos[4], y_pos[4])
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (20,20)
      fillColor = $[-1,-1,-1]
      units = pix
      nVertices = 5
      opacity [set every repeat] = opacity_4
      interpolate = nearest
      lineWidth = 0
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    PolygonComponent distract_5
      pos [set every repeat] = (x_pos[5], y_pos[5])
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (20,20)
      fillColor = $[-1,-1,-1]
      units = pix
      nVertices = 5
      opacity [set every repeat] = opacity_5
      interpolate = nearest
      lineWidth = 0
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    PolygonComponent distract_6
      pos [set every repeat] = (x_pos[6], y_pos[6])
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (20,20)
      fillColor = $[-1,-1,-1]
      units = pix
      nVertices = 5
      opacity [set every repeat] = opacity_6
      interpolate = nearest
      lineWidth = 0
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    PolygonComponent distract_7
      pos [set every repeat] = (x_pos[7], y_pos[7])
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (20,20)
      fillColor = $[-1,-1,-1]
      units = pix
      nVertices = 5
      opacity [set every repeat] = opacity_7
      interpolate = nearest
      lineWidth = 0
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    PolygonComponent distract_8
      pos [set every repeat] = (x_pos[8], y_pos[8])
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (20,20)
      fillColor = $[-1,-1,-1]
      units = pix
      nVertices = 5
      opacity [set every repeat] = opacity_8
      interpolate = nearest
      lineWidth = 0
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    PolygonComponent gaze_position_1
      pos [set every frame] = (gaze_x, gaze_y)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (30, 30)
      units = pix
      nVertices = 99
      lineColor = $[-1,-1,1]
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  Routine instruct
    TextComponent instructs
      color = blue
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Fixate on the blue circle.

        Then click the hexagon as
        quickly as possible.

        Press any key to start.
    KeyboardComponent proceed_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent only_run_each18
      Begin Routine:
        if trials.thisN % 18 != 0:
            continueRoutine = False
    TextComponent block_info
      color = blue
      text [set every repeat] = $'Block: ' + str(trials.thisRepN)
      pos = (0, -0.5)
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine tracker_setup
    CodeComponent tracker_code
      Begin Experiment:
        # keep track of we manage to connect:
        tracker_connected = False
        fixation_boundary = 40 # pixel tolerance for fixation target

        # get the name of our YAML config file from the expInfo dialog:
        config_file = expInfo['Eye tracker config']

        # only proceed if the filename points to a valid file:
        if os.path.isfile(config_file):
            # import some needed libraries from ioHub:
            from psychopy.iohub import util, client
            from psychopy.data import getDateStr # so we can time-stamp files etc

            io_config = util.readConfig(config_file)

            #print(io_config)
            io = client.ioHubConnection(io_config)

            if io.getDevice('tracker'):
                # give it a name so we can refer to it:         eye_tracker = io.getDevice('tracker')         tracker_connected = True         # minimize the Builder window to get it out of the way:         win.winHandle.minimize()         # show ioHub windows for running the calibration:         eye_tracker.runSetupProcedure()         # allow keypresses to go back to the Builder window:         win.winHandle.activate()         # and maximize it to conti

                gaze_x = 0
                gaze_y = 0

        if not tracker_connected:
            print("Quit because couldn't connect to eye tracker.")
            core.quit()
    TextComponent tracker_message
      text = Eye tracker setup
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent proceed
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
    CodeComponent eye_pos_feedback
      Begin Routine:
        #correct_sound.play()
      Each Frame:
        gaze_pos = eye_tracker.getPosition()

        if type(gaze_pos) in [list, tuple]:
            gaze_x, gaze_y = gaze_pos
        else:
            print('Not tuple or list.')
            print(gaze_pos)
    PolygonComponent target_2
      pos [set every repeat] = (x_pos[0], y_pos[0])
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (20,20)
      fillColor = green
      units = pix
      nVertices = 6
      stopVal [duration (s)] = 0.5
      ori = 30
      lineWidth = 0
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    PolygonComponent distract
      pos [set every repeat] = (x_pos[1], y_pos[1])
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (20,20)
      fillColor = $[-1,-1,-1]
      units = pix
      nVertices = 5
      opacity [set every repeat] = opacity_1
      stopVal [duration (s)] = 0.5
      interpolate = nearest
      lineWidth = 0
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    PolygonComponent distract_9
      pos [set every repeat] = (x_pos[2], y_pos[2])
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (20,20)
      fillColor = $[-1,-1,-1]
      units = pix
      nVertices = 5
      opacity [set every repeat] = opacity_2
      stopVal [duration (s)] = 0.5
      interpolate = nearest
      lineWidth = 0
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    PolygonComponent distract_10
      pos [set every repeat] = (x_pos[3], y_pos[3])
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (20,20)
      fillColor = $[-1,-1,-1]
      units = pix
      nVertices = 5
      opacity [set every repeat] = opacity_3
      stopVal [duration (s)] = 0.5
      interpolate = nearest
      lineWidth = 0
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    PolygonComponent distract_11
      pos [set every repeat] = (x_pos[4], y_pos[4])
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (20,20)
      fillColor = $[-1,-1,-1]
      units = pix
      nVertices = 5
      opacity [set every repeat] = opacity_4
      stopVal [duration (s)] = 0.5
      interpolate = nearest
      lineWidth = 0
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    PolygonComponent distract_12
      pos [set every repeat] = (x_pos[5], y_pos[5])
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (20,20)
      fillColor = $[-1,-1,-1]
      units = pix
      nVertices = 5
      opacity [set every repeat] = opacity_5
      stopVal [duration (s)] = 0.5
      interpolate = nearest
      lineWidth = 0
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    PolygonComponent distract_13
      pos [set every repeat] = (x_pos[6], y_pos[6])
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (20,20)
      fillColor = $[-1,-1,-1]
      units = pix
      nVertices = 5
      opacity [set every repeat] = opacity_6
      stopVal [duration (s)] = 0.5
      interpolate = nearest
      lineWidth = 0
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    PolygonComponent distract_14
      pos [set every repeat] = (x_pos[7], y_pos[7])
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (20,20)
      fillColor = $[-1,-1,-1]
      units = pix
      nVertices = 5
      opacity [set every repeat] = opacity_7
      stopVal [duration (s)] = 0.5
      interpolate = nearest
      lineWidth = 0
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    PolygonComponent distract_15
      pos [set every repeat] = (x_pos[8], y_pos[8])
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (20,20)
      fillColor = $[-1,-1,-1]
      units = pix
      nVertices = 5
      opacity [set every repeat] = opacity_8
      stopVal [duration (s)] = 0.5
      interpolate = nearest
      lineWidth = 0
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    PolygonComponent gaze_position_2
      pos [set every frame] = (gaze_x, gaze_y)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (30, 30)
      units = pix
      nVertices = 99
      stopVal [duration (s)] = 0.5
      lineColor = $[-1,-1,1]
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Flow
  Routine tracker_setup
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = search_conditions.xlsx
    loopType = random
    nReps = 20
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    conditions:
      [{u'opacity_7': 1L, u'opacity_6': 1L, u'opacity_5': 1L, u'opacity_4': 1L, u'opacity_3': 1L, u'opacity_2': 1L, u'opacity_1': 1L, u'target_color': u'black', u'n_distract': 8L, u'opacity_8': 1L},
      {u'opacity_7': 1L, u'opacity_6': 1L, u'opacity_5': 1L, u'opacity_4': 1L, u'opacity_3': 1L, u'opacity_2': 1L, u'opacity_1': 1L, u'target_color': u'black', u'n_distract': 7L, u'opacity_8': 0L},
      {u'opacity_7': 0L, u'opacity_6': 1L, u'opacity_5': 1L, u'opacity_4': 1L, u'opacity_3': 1L, u'opacity_2': 1L, u'opacity_1': 1L, u'target_color': u'black', u'n_distract': 6L, u'opacity_8': 0L},
      {u'opacity_7': 0L, u'opacity_6': 0L, u'opacity_5': 1L, u'opacity_4': 1L, u'opacity_3': 1L, u'opacity_2': 1L, u'opacity_1': 1L, u'target_color': u'black', u'n_distract': 5L, u'opacity_8': 0L},
      {u'opacity_7': 0L, u'opacity_6': 0L, u'opacity_5': 0L, u'opacity_4': 1L, u'opacity_3': 1L, u'opacity_2': 1L, u'opacity_1': 1L, u'target_color': u'black', u'n_distract': 4L, u'opacity_8': 0L},
      {u'opacity_7': 0L, u'opacity_6': 0L, u'opacity_5': 0L, u'opacity_4': 0L, u'opacity_3': 1L, u'opacity_2': 1L, u'opacity_1': 1L, u'target_color': u'black', u'n_distract': 3L, u'opacity_8': 0L},
      {u'opacity_7': 0L, u'opacity_6': 0L, u'opacity_5': 0L, u'opacity_4': 0L, u'opacity_3': 0L, u'opacity_2': 1L, u'opacity_1': 1L, u'target_color': u'black', u'n_distract': 2L, u'opacity_8': 0L}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
    Routine instruct
    Routine fixation
    Routine trial
    Routine feedback
  LoopTerminator trials
