PsychoPy2experiment version="1.90.0"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  expName = GFMT_short
  Screen = 1
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Routines
  Routine trial
    ImageComponent faces
      startVal [time (s)] = 0.0
      image [set every repeat] = $imageFile
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    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'imageFile': u'same/020_C2_DV.jpg', 'sameOrDiff': u'same', 'corrAns': u'left'},
      {'imageFile': u'same/025_C2_DV.jpg', 'sameOrDiff': u'same', 'corrAns': u'left'},
      {'imageFile': u'same/068_C2_DV.jpg', 'sameOrDiff': u'same', 'corrAns': u'left'},
      {'imageFile': u'same/069_C2_DV.jpg', 'sameOrDiff': u'same', 'corrAns': u'left'},
      {'imageFile': u'same/074_C2_DV.jpg', 'sameOrDiff': u'same', 'corrAns': u'left'},
      {'imageFile': u'same/075_DV_C2.jpg', 'sameOrDiff': u'same', 'corrAns': u'left'},
      {'imageFile': u'same/081_C2_DV.jpg', 'sameOrDiff': u'same', 'corrAns': u'left'},
      {'imageFile': u'same/085_C2_DV.jpg', 'sameOrDiff': u'same', 'corrAns': u'left'},
      {'imageFile': u'same/092_C2_DV.jpg', 'sameOrDiff': u'same', 'corrAns': u'left'},
      {'imageFile': u'same/102_C2_DV.jpg', 'sameOrDiff': u'same', 'corrAns': u'left'},
      {'imageFile': u'same/108_DV_C2.jpg', 'sameOrDiff': u'same', 'corrAns': u'left'},
      {'imageFile': u'same/115_C2_DV.jpg', 'sameOrDiff': u'same', 'corrAns': u'left'},
      {'imageFile': u'same/120_DV_C2.jpg', 'sameOrDiff': u'same', 'corrAns': u'left'},
      {'imageFile': u'same/129_C2_DV.jpg', 'sameOrDiff': u'same', 'corrAns': u'left'},
      {'imageFile': u'same/136_C2_DV.jpg', 'sameOrDiff': u'same', 'corrAns': u'left'},
      {'imageFile': u'same/139_DV_C2.jpg', 'sameOrDiff': u'same', 'corrAns': u'left'},
      {'imageFile': u'same/168_C2_DV.jpg', 'sameOrDiff': u'same', 'corrAns': u'left'},
      {'imageFile': u'same/170_DV_C2.jpg', 'sameOrDiff': u'same', 'corrAns': u'left'}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
    Routine trial
  LoopTerminator trials
