PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [600, 400]
  Full-screen window = False
  Show info dlg = False
  expName = bouncing_ball
  Screen = 1
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Routines
  Routine trial
    PolygonComponent polygon
      pos [set every frame] = (0, (sin(t*6)**2)/20)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = 0.05
      fillColor = red
      units = height
      nVertices = 100
      stopVal [duration (s)] = 10
      lineColor = pink
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Flow
  Routine trial
