PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  JS libs = remote
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = rotatingFaces
  Screen = 1
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Routines
  Routine trial
    ImageComponent face
      stopVal [duration (s)] = 10
      units = pix
      ori [set every frame] = $t*180
      startVal [time (s)] = 0.0
      image [set every repeat] = $imageFile
      size [set every frame] = t*40
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = faceConditions.csv
    loopType = random
    nReps = 5
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    conditions:
      [{'imageFile': 'faces/face01.jpg'},
      {'imageFile': 'faces/face02.jpg'},
      {'imageFile': 'faces/face03.jpg'}]
    Routine trial
  LoopTerminator trials
