PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = flashDrag
  Screen = 1
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Routines
  Routine trial
    GratingComponent rotatingDisk
      tex = $random([64,64])*2-1
      stopVal [duration (s)] = 10
      mask = circle
      units = height
      ori [set every frame] = sin(t*5)*50
      startVal [time (s)] = 0.0
      sf = None
      size = 0.8
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    PolygonComponent topTarget
      pos = (0, 0.3)
      shape = regular polygon...
      startVal [time (s)] = 0
      size = (0.05, 0.05)
      fillColor = red
      units = height
      nVertices = 50
      opacity [set every frame] = abs(sin(t*5))>0.99
      stopVal [duration (s)] = 10
      lineColor = red
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    PolygonComponent bottomTarget
      pos = (0, -0.3)
      shape = regular polygon...
      startVal [time (s)] = 0
      size = (0.05, 0.05)
      fillColor = red
      units = height
      nVertices = 50
      opacity [set every frame] = abs(sin(t*5))>0.99
      stopVal [duration (s)] = 10
      lineColor = red
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    PolygonComponent fixation
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.01, 0.01)
      fillColor = red
      units = height
      nVertices = 50
      stopVal [duration (s)] = 10
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Flow
  Routine trial
