PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  JS libs = remote
  Units = use prefs
  Window size (pixels) = [600,400]
  Full-screen window = False
  Show info dlg = False
  expName = gradualReveal
  Screen = 1
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Routines
  Routine trial
    TextComponent sentence
      wrapWidth = 2
      text = When will participants get the surprise of this banana?
      stopVal [duration (s)] = 4
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    PolygonComponent mask
      pos [set every frame] = (t*0.5, 0)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (2, 0.5)
      fillColor = grey
      stopVal [duration (s)] = 4.0
      lineColor = grey
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Flow
  Routine trial
