PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {u'gender (m/f)': u'f', u'age': u'', u'participant': u''}
  Units = norm
  Save excel file = True
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  expName = stroop
  logging level = warning
  Screen = 1
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Routines
  Routine trial
    TextComponent stim
      color [set every repeat] = $letterColor
      text [set every repeat] = $word
      startVal [time (s)] = 0.5
      letterHeight = 0.2
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    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = "left","down","right"
      startVal [time (s)] = 0.5
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      startVal [time (s)] = 0
      letterHeight = 0.1
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      text:
        OK. Ready for the real thing?

        Remember, ignore the word itself; press:
        Left for red LETTERS
        Down for green LETTERS
        Right for blue LETTERS
        (Esc will quit)

        Press any key to continue
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 0.3
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      text:
        This is the end of the experiment.

        Thanks!
  Routine feedback
    CodeComponent setMsg
      Begin Routine:
        if resp.corr:
            msg = "Correct! RT={:.3f}".format(resp.rt)
        else:
            msg = "Oops! That was wrong"
    TextComponent feedbackText
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
    endPoints = [1, 2]
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    conditions:
      [OrderedDict([('word', u'red'), ('letterColor', u'red'), ('corrAns', u'left'), ('congruent', 1)]),
      OrderedDict([('word', u'red'), ('letterColor', u'green'), ('corrAns', u'down'), ('congruent', 0)]),
      OrderedDict([('word', u'green'), ('letterColor', u'green'), ('corrAns', u'down'), ('congruent', 1)]),
      OrderedDict([('word', u'green'), ('letterColor', u'blue'), ('corrAns', u'right'), ('congruent', 0)]),
      OrderedDict([('word', u'blue'), ('letterColor', u'blue'), ('corrAns', u'right'), ('congruent', 1)]),
      OrderedDict([('word', u'blue'), ('letterColor', u'red'), ('corrAns', u'left'), ('congruent', 0)])]
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine thanks
