PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  expName = IPIP-NEO-120
  Screen = 1
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Routines
  Routine trial
    TextComponent item
      text [set every repeat] = $Item
      pos = (0, 0.5)
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    RatingScaleComponent rating
      labels = Very inaccurate, Very accurate
      pos = 0, -0.2
      high = 5
      startVal [time (s)] = 0.0
      size = 1.5
      showAccept = False
      forceEndRoutine = True
      low = 1
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    TextComponent msgContinue
      text = Use the mouse to select a response and then press the <return> key to continue
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    CodeComponent code
      End Routine:
        if Scoring=='-':
            thisExp.addData('score', 5-rating.getRating())
        elif Scoring=='+':
            thisExp.addData('score', rating.getRating())
        else:
            print(repr(Scoring))
  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 0.3
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      text:
        This is the end of the experiment.

        Thanks!
  Routine instructions
    TextComponent instrText
      color = $[1, 1, 1]
      startVal [time (s)] = 0
      letterHeight = 0.08
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      text:
        You will see a number of statements and your task is to rate how accurately they describe you.

        For each rating you should select the point on the scale that is most appropriate and then press the <return> key

        When you're ready to start press any key now
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = IPIP-NEO-PI-R-120-Johnson2014.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'Scoring': u'+', u'Code': u'N1', u'Number': 1L, u'Facet': u'Anxiety', u'Item': u'Worry about things.', u'Factor': u'Neuroticism'},
      {u'Scoring': u'+', u'Code': u'N1', u'Number': 2L, u'Facet': u'Anxiety', u'Item': u'Fear for the worst.', u'Factor': u'Neuroticism'},
      {u'Scoring': u'+', u'Code': u'N1', u'Number': 3L, u'Facet': u'Anxiety', u'Item': u'Am afraid of many things.', u'Factor': u'Neuroticism'},
      {u'Scoring': u'+', u'Code': u'N1', u'Number': 4L, u'Facet': u'Anxiety', u'Item': u'Get stressed out easily.', u'Factor': u'Neuroticism'},
      {u'Scoring': u'+', u'Code': u'N2', u'Number': 5L, u'Facet': u'Anger', u'Item': u'Get angry easily.', u'Factor': u'Neuroticism'},
      {u'Scoring': u'+', u'Code': u'N2', u'Number': 6L, u'Facet': u'Anger', u'Item': u'Get irritated easily.', u'Factor': u'Neuroticism'},
      {u'Scoring': u'+', u'Code': u'N2', u'Number': 7L, u'Facet': u'Anger', u'Item': u'Lose my temper.', u'Factor': u'Neuroticism'},
      {u'Scoring': u'-', u'Code': u'N2', u'Number': 8L, u'Facet': u'Anger', u'Item': u'Am not easily annoyed.', u'Factor': u'Neuroticism'},
      {u'Scoring': u'+', u'Code': u'N3', u'Number': 9L, u'Facet': u'Depression', u'Item': u'Often feel blue.', u'Factor': u'Neuroticism'},
      {u'Scoring': u'+', u'Code': u'N3', u'Number': 10L, u'Facet': u'Depression', u'Item': u'Dislike myself.', u'Factor': u'Neuroticism'},
      {u'Scoring': u'+', u'Code': u'N3', u'Number': 11L, u'Facet': u'Depression', u'Item': u'Am often down in the dumps.', u'Factor': u'Neuroticism'}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
    Routine trial
  LoopTerminator trials
  Routine thanks
