PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  Experiment info = {u'Gender': u'specify', u'Age': u'99', u'Participant': u'C01'}
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Data filename = 'data/%s_%s_%s' %(expInfo['Participant'], expName, expInfo['date'])
  expName = Stroop task with blocking
  Screen = 1
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Routines
  Routine trial
    PolygonComponent fixation
      shape = cross
      startVal [time (s)] = 0.0
      size = 30
      fillColor = $[1,1,1]
      units = pix
      stopVal [duration (s)] = 0.5
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    TextComponent stroopText
      color [set every repeat] = $letterColor
      text [set every repeat] = $word
      startVal [time (s)] = 0.5
      letterHeight = 0.25
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    KeyboardComponent response
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left','right','down'
      startVal [time (s)] = 0.5
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    CodeComponent trialCode
      Begin Experiment:
        # lists to hold RTs:
        maori_cong = []
        maori_incong = []
        english_cong = []
        english_incong = []
      End Routine:
        # store RTs in respective lists:
        if response.corr:
            if language == u'Maori':
                if congruent == 1:
                    maori_cong.append(response.rt)
                else:
                    maori_incong.append(response.rt)
            else:
                if congruent == 1:
                    english_cong.append(response.rt)
                else:
                    english_incong.append(response.rt)
  Routine instruct
    TextComponent instructFixed
      pos = [0, 0.6]
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        A colored word will appear on the screen.

        As quickly as you can, indicate its color by pressing one of these arrow keys:
    TextComponent instructChanging
      text [set every repeat] = $instructions
      pos = [0, -0.1]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent pushSpace
      text = Push the spacebar when you are ready to begin the task.
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent instructResp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine thanks
    CodeComponent thanksCode
      Begin Routine:
        english_effect = np.mean(english_incong) - np.mean(english_cong)
        english_effect = int(english_effect * 1000)

        maori_effect = np.mean(maori_incong) - np.mean(maori_cong)
        maori_effect = int(maori_effect * 1000)

        english_cong.extend(maori_cong)
        avg_rt = np.mean(english_cong)
        avg_rt = int(avg_rt * 1000)

        #feedback_text.text = str(np.mean(english_incong))
        msg = u'Your standard reaction time was:\n' + str(avg_rt) + ' ms.\n\n'
        msg += u'Your English Stroop effect was:\n' + str(english_effect) + ' milliseconds.\n\n'
        msg += u'Your Māori Stroop effect was:\n' + str(maori_effect) + ' milliseconds.'

        feedbackText.text = msg
    TextComponent feedbackText
      text = Feedback
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent thanksResp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = block_order_instr.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('language', u'English'), ('instructions', u'red = \u2190, green = \u2193, blue = \u2192')]),
      OrderedDict([('language', u'Maori'), ('instructions', u'whero = \u2190, k\u0101k\u0101riki = \u2193, kikorangi = \u2192')])]
    Routine instruct
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $language + '.xlsx'
      loopType = random
      nReps = 10
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      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
  Routine thanks
