PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Show mouse = True
  Show info dlg = False
  expName = visualSearch_MRM_new_mouse
  Screen = 1
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Routines
  Routine trial
    MouseComponent mouse
      timeRelativeTo = routine
      forceEndRoutineOnPress = valid click
      clickable = target
      startVal [time (s)] = 0.0
      saveParamsClickable = name,pos
      saveMouseState = on click
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    CodeComponent code
      Begin Experiment:
        x_pos = [-400, -300, -200, -100, 0, 100, 200, 300, 400]
        y_pos = [-400, -300, -200, -100, 0, 100, 200, 300, 400]
      Begin Routine:
        shuffle(x_pos)
        shuffle(y_pos)
      Each Frame:
        # provide some (probably not useful) visual feedback:
        if target.contains(mouse):
            target.size = (40,40)
        else:
            target.size = (20,20)
    PolygonComponent target
      pos [set every repeat] = (x_pos[0], y_pos[0])
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (20,20)
      fillColor [set every repeat] = $target_color
      units = pix
      nVertices = 6
      ori = 30
      lineWidth = 0
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    PolygonComponent distract_1
      pos [set every repeat] = (x_pos[1], y_pos[1])
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (20,20)
      fillColor = $[-1,-1,-1]
      units = pix
      nVertices = 5
      opacity [set every repeat] = opacity_1
      interpolate = nearest
      lineWidth = 0
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    PolygonComponent distract_2
      pos [set every repeat] = (x_pos[2], y_pos[2])
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (20,20)
      fillColor = $[-1,-1,-1]
      units = pix
      nVertices = 5
      opacity [set every repeat] = opacity_2
      interpolate = nearest
      lineWidth = 0
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    PolygonComponent distract_3
      pos [set every repeat] = (x_pos[3], y_pos[3])
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (20,20)
      fillColor = $[-1,-1,-1]
      units = pix
      nVertices = 5
      opacity [set every repeat] = opacity_3
      interpolate = nearest
      lineWidth = 0
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    PolygonComponent distract_4
      pos [set every repeat] = (x_pos[4], y_pos[4])
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (20,20)
      fillColor = $[-1,-1,-1]
      units = pix
      nVertices = 5
      opacity [set every repeat] = opacity_4
      interpolate = nearest
      lineWidth = 0
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    PolygonComponent distract_5
      pos [set every repeat] = (x_pos[5], y_pos[5])
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (20,20)
      fillColor = $[-1,-1,-1]
      units = pix
      nVertices = 5
      opacity [set every repeat] = opacity_5
      interpolate = nearest
      lineWidth = 0
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    PolygonComponent distract_6
      pos [set every repeat] = (x_pos[6], y_pos[6])
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (20,20)
      fillColor = $[-1,-1,-1]
      units = pix
      nVertices = 5
      opacity [set every repeat] = opacity_6
      interpolate = nearest
      lineWidth = 0
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    PolygonComponent distract_7
      pos [set every repeat] = (x_pos[7], y_pos[7])
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (20,20)
      fillColor = $[-1,-1,-1]
      units = pix
      nVertices = 5
      opacity [set every repeat] = opacity_7
      interpolate = nearest
      lineWidth = 0
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    PolygonComponent distract_8
      pos [set every repeat] = (x_pos[8], y_pos[8])
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (20,20)
      fillColor = $[-1,-1,-1]
      units = pix
      nVertices = 5
      opacity [set every repeat] = opacity_8
      interpolate = nearest
      lineWidth = 0
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  Routine instruct
    MouseComponent instruct_mouse
      timeRelativeTo = routine
      forceEndRoutineOnPress = any click
      startVal [time (s)] = 0.0
      saveMouseState = never
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    TextComponent text
      color = blue
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Click the hexagon as
        quickly as possible.

        Press the mouse button to start.
    CodeComponent code_3
      Begin Routine:
        if trials.thisN % 18 != 0:
            continueRoutine = False
    TextComponent text_2
      color = blue
      text [set every repeat] = $'Block: ' + str(trials.thisRepN)
      pos = (0, -0.5)
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine ITI
    PolygonComponent fixation
      shape = cross
      startVal [time (s)] = 0.0
      size = (30, 30)
      fillColor = $[1,1,1]
      units = pix
      stopVal [duration (s)] = 0.5
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = search_conditions.xlsx
    loopType = random
    nReps = 20
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    conditions:
      [{u'opacity_7': 1L, u'opacity_6': 1L, u'opacity_5': 1L, u'opacity_4': 1L, u'opacity_3': 1L, u'opacity_2': 1L, u'opacity_1': 1L, u'target_color': u'black', u'n_distract': 8L, u'opacity_8': 1L},
      {u'opacity_7': 1L, u'opacity_6': 1L, u'opacity_5': 1L, u'opacity_4': 1L, u'opacity_3': 1L, u'opacity_2': 1L, u'opacity_1': 1L, u'target_color': u'black', u'n_distract': 7L, u'opacity_8': 0L},
      {u'opacity_7': 0L, u'opacity_6': 1L, u'opacity_5': 1L, u'opacity_4': 1L, u'opacity_3': 1L, u'opacity_2': 1L, u'opacity_1': 1L, u'target_color': u'black', u'n_distract': 6L, u'opacity_8': 0L},
      {u'opacity_7': 0L, u'opacity_6': 0L, u'opacity_5': 1L, u'opacity_4': 1L, u'opacity_3': 1L, u'opacity_2': 1L, u'opacity_1': 1L, u'target_color': u'black', u'n_distract': 5L, u'opacity_8': 0L},
      {u'opacity_7': 0L, u'opacity_6': 0L, u'opacity_5': 0L, u'opacity_4': 1L, u'opacity_3': 1L, u'opacity_2': 1L, u'opacity_1': 1L, u'target_color': u'black', u'n_distract': 4L, u'opacity_8': 0L},
      {u'opacity_7': 0L, u'opacity_6': 0L, u'opacity_5': 0L, u'opacity_4': 0L, u'opacity_3': 1L, u'opacity_2': 1L, u'opacity_1': 1L, u'target_color': u'black', u'n_distract': 3L, u'opacity_8': 0L},
      {u'opacity_7': 0L, u'opacity_6': 0L, u'opacity_5': 0L, u'opacity_4': 0L, u'opacity_3': 0L, u'opacity_2': 1L, u'opacity_1': 1L, u'target_color': u'black', u'n_distract': 2L, u'opacity_8': 0L}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
    Routine instruct
    Routine ITI
    Routine trial
  LoopTerminator trials
