PsychoPy2experiment version="1.90.0"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {u'gender (m/f)': u'f', u'age': u'', u'participant': u''}
  Units = norm
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  expName = stroop
  Screen = 1
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Routines
  Routine trial
    TextComponent stim
      color [set every repeat] = $letterColor
      text [set every repeat] = $word
      startVal [time (s)] = 0.5
      letterHeight = 0.2
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    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = "left","down","right"
      startVal [time (s)] = 0.5
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      startVal [time (s)] = 0
      letterHeight = 0.1
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      text:
        OK. Ready for the real thing?

        Remember, ignore the letter colors itself; press:
        Left for the WORD red
        Down for the WORD green
        Right for the WORD blue
        (Esc will quit)

        Press any key to continue
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 0.3
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      text:
        This is the end of the experiment.

        Thanks!
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
    endPoints = [1, 2]
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    conditions:
      [{u'congruent': 1L, u'word': u'red', u'corrAns': u'left', u'letterColor': u'red'},
      {u'congruent': 0L, u'word': u'red', u'corrAns': u'down', u'letterColor': u'green'},
      {u'congruent': 1L, u'word': u'green', u'corrAns': u'down', u'letterColor': u'green'},
      {u'congruent': 0L, u'word': u'green', u'corrAns': u'right', u'letterColor': u'blue'},
      {u'congruent': 1L, u'word': u'blue', u'corrAns': u'right', u'letterColor': u'blue'},
      {u'congruent': 0L, u'word': u'blue', u'corrAns': u'left', u'letterColor': u'red'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
