PsychoPy2experiment version="1.90.0"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = deg
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  expName = posner
  Screen = 1
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Routines
  Routine trial
    ImageComponent cue
      stopVal [frame N] = 12
      durationEstim = 0.2
      startVal [time (s)] = 0.0
      image [set during: ITI.imageLoading] = $cueImage
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    PolygonComponent target
      pos [set every repeat] = (targetX, 0)
      shape = rectangle
      startVal [frame N] = 12
      size = (200,200)
      fillColor = MediumSeaGreen
      units = pix
      stopVal [duration (s)] = 1.0
      startEstim = 0.2
      lineColor = SeaGreen
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startEstim = 0.2
      allowedKeys = 'y','n','left','right','space'
      startVal [frame N] = 12
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  Routine instruct
    TextComponent instructText
      startVal [time (s)] = 0.0
      letterHeight = 1.0
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      text:
        Press the left and right keys to indicate the side where you saw the green square.

        Note that the eyes are NOT helping you here - they will indicate the correct direction on only half the trials.

        Try to respond as quickly and accurately as you can.

        Press any key when you're ready to start
    KeyboardComponent instructEnd
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
  Routine ITI
    PolygonComponent fixationITI
      shape = cross
      startVal [time (s)] = 0.0
      size = (0.5, 0.5)
      fillColor = white
      units = deg
      nVertices = 20
      stopVal [duration (s)] = random()+1
      durationEstim = 1.5
      lineWidth = 2
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    StaticComponent imageLoading
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('cueSide', u'right'), ('cueImage', u'eyesRight.jpg'), ('targetX', 500), ('corrAns', u'right'), ('valid', 1)]),
      OrderedDict([('cueSide', u'right'), ('cueImage', u'eyesRight.jpg'), ('targetX', 500), ('corrAns', u'right'), ('valid', 1)]),
      OrderedDict([('cueSide', u'right'), ('cueImage', u'eyesRight.jpg'), ('targetX', -500), ('corrAns', u'left'), ('valid', 0)]),
      OrderedDict([('cueSide', u'right'), ('cueImage', u'eyesRight.jpg'), ('targetX', -500), ('corrAns', u'left'), ('valid', 0)]),
      OrderedDict([('cueSide', u'left'), ('cueImage', u'eyesLeft.jpg'), ('targetX', -500), ('corrAns', u'left'), ('valid', 1)]),
      OrderedDict([('cueSide', u'left'), ('cueImage', u'eyesLeft.jpg'), ('targetX', -500), ('corrAns', u'left'), ('valid', 1)]),
      OrderedDict([('cueSide', u'left'), ('cueImage', u'eyesLeft.jpg'), ('targetX', 500), ('corrAns', u'right'), ('valid', 0)]),
      OrderedDict([('cueSide', u'left'), ('cueImage', u'eyesLeft.jpg'), ('targetX', 500), ('corrAns', u'right'), ('valid', 0)])]
    Routine ITI
    Routine trial
  LoopTerminator trials
  Routine thanks
