PsychoPy2experiment version="1.90.0"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = deg
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  expName = posner_SOAs
  Screen = 1
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Routines
  Routine trial
    PolygonComponent cue
      shape = triangle
      startVal [time (s)] = 0.0
      size = (100,200)
      fillColor = $[1,1,1]
      units = pix
      nVertices = 3
      stopVal [duration (frames)] = SOA_frames
      durationEstim = 0.2
      ori [set every repeat] = cueOri
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    PolygonComponent target
      pos [set every repeat] = (targetX, 0)
      shape = rectangle
      startVal [frame N] = SOA_frames
      size = (200,200)
      fillColor = MediumSeaGreen
      units = pix
      stopVal [duration (s)] = 1.0
      startEstim = 0.2
      lineColor = SeaGreen
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    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 2
      forceEndRoutine = True
      startEstim = 0.2
      allowedKeys = 'left','right'
      startVal [frame N] = SOA_frames
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  Routine instruct
    TextComponent instructText
      startVal [time (s)] = 0.0
      letterHeight = 1.0
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      text:
        Press the left and right keys as
        to indicate the side where
        you saw the green square.

        Try to respond as quickly and accurately as you can.

        Press any key when you're ready to start
    KeyboardComponent instructEnd
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
  Routine ITI
    PolygonComponent fixationITI
      shape = cross
      startVal [time (s)] = 0.0
      size = (0.5, 0.5)
      fillColor = white
      units = deg
      nVertices = 20
      stopVal [duration (s)] = random()+1
      durationEstim = 1.5
      lineWidth = 2
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Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 8
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    conditions:
      [OrderedDict([('cueSide', u'left'), ('cueOri', -90), ('targetX', -500), ('corrAns', u'left'), ('valid', 1), ('SOA_frames', 6)]),
      OrderedDict([('cueSide', u'left'), ('cueOri', -90), ('targetX', 500), ('corrAns', u'right'), ('valid', 0), ('SOA_frames', 6)]),
      OrderedDict([('cueSide', u'right'), ('cueOri', 90), ('targetX', 500), ('corrAns', u'right'), ('valid', 1), ('SOA_frames', 6)]),
      OrderedDict([('cueSide', u'right'), ('cueOri', 90), ('targetX', -500), ('corrAns', u'left'), ('valid', 0), ('SOA_frames', 6)]),
      OrderedDict([('cueSide', u'left'), ('cueOri', -90), ('targetX', -500), ('corrAns', u'left'), ('valid', 1), ('SOA_frames', 12)]),
      OrderedDict([('cueSide', u'left'), ('cueOri', -90), ('targetX', 500), ('corrAns', u'right'), ('valid', 0), ('SOA_frames', 12)]),
      OrderedDict([('cueSide', u'right'), ('cueOri', 90), ('targetX', 500), ('corrAns', u'right'), ('valid', 1), ('SOA_frames', 12)]),
      OrderedDict([('cueSide', u'right'), ('cueOri', 90), ('targetX', -500), ('corrAns', u'left'), ('valid', 0), ('SOA_frames', 12)]),
      OrderedDict([('cueSide', u'left'), ('cueOri', -90), ('targetX', -500), ('corrAns', u'left'), ('valid', 1), ('SOA_frames', 24)]),
      OrderedDict([('cueSide', u'left'), ('cueOri', -90), ('targetX', 500), ('corrAns', u'right'), ('valid', 0), ('SOA_frames', 24)]),
      OrderedDict([('cueSide', u'right'), ('cueOri', 90), ('targetX', 500), ('corrAns', u'right'), ('valid', 1), ('SOA_frames', 24)])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
    Routine ITI
    Routine trial
  LoopTerminator trials
  Routine thanks
