PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [800,600]
  Full-screen window = False
  Show info dlg = False
  expName = rotating_eyes
  Screen = 1
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Routines
  Routine trial
    PolygonComponent left_eye
      fillColor = white
      stopVal [duration (s)] = 10
      pos = (-0.3, 0)
      units = height
      startVal [time (s)] = 0.0
      nVertices = 100
      size = (0.3, 0.2)
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    PolygonComponent left_pupil
      fillColor = black
      stopVal [duration (s)] = 10.0
      pos [set every frame] = (-0.3+sin(t*2)/10, 0)
      units = height
      lineColor = black
      startVal [time (s)] = 0.0
      nVertices = 100
      size = 0.05
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    PolygonComponent right_eye
      fillColor = white
      stopVal [duration (s)] = 10
      pos = (+0.3, 0)
      units = height
      startVal [time (s)] = 0.0
      nVertices = 100
      size = (0.3, 0.2)
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    PolygonComponent right_pupil
      fillColor = black
      stopVal [duration (s)] = 10.0
      pos [set every frame] = (+0.3+sin(t*2)/10, 0)
      units = height
      lineColor = black
      startVal [time (s)] = 0.0
      nVertices = 100
      size = 0.05
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Flow
  Routine trial
