PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = multi-rating
  Screen = 1
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Routines
  Routine trial
    TextComponent stim
      text [set every repeat] = $word
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    RatingScaleComponent rateNatural
      labels = Very unnatural, Very natural
      pos = 0.5, -0.4
      high = 7
      startVal [time (s)] = 0.0
      size = 1.0
      showAccept = False
      forceEndRoutine = False
      low = 1
      singleClick = True
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    RatingScaleComponent ratePleasant
      labels = Very unpleasant, Very pleasant
      pos = 0.5, 0.4
      high = 7
      startVal [time (s)] = 0.0
      size = 1.0
      showAccept = False
      forceEndRoutine = False
      low = 1
      singleClick = True
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    KeyboardComponent doneRating
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent instruct
      text = Select your ratings and hit space to move on
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'word': u'pineapple'},
      {u'word': u'glow worm'},
      {u'word': u'pencil'},
      {u'word': u'unicorn'},
      {u'word': u'ogre'},
      {u'word': u'beer'},
      {u'word': u'fire'},
      {u'word': u'hospital'}]
    Routine trial
  LoopTerminator trials
