PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1024,768]
  Full-screen window = False
  expName = hoverImages
  Screen = 1
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Routines
  Routine trial
    CodeComponent contrastControl
      Each Frame:
        if image_1.contains(mouse):
            image_1.contrast = 0.5
        else:
            image_1.contrast = 1.0

        if image_2.contains(mouse):
            image_2.contrast = 0.5
        else:
            image_2.contrast = 1.0

        if image_3.contains(mouse):
            image_3.contrast = 0.5
        else:
            image_3.contrast = 1.0
    ImageComponent image_1
      pos = (-250, 0)
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $file1
      size = (200,200)
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    ImageComponent image_2
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $file2
      size = (200,200)
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    ImageComponent image_3
      pos = (+250, 0)
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $file3
      size = (200,200)
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    MouseComponent mouse
      timeRelativeTo = routine
      forceEndRoutineOnPress = any click
      startVal [time (s)] = 0.0
      saveMouseState = final
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    TextComponent text
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Hover mouse over images.

        Press mouse button for new trial
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('file1', u'stims/face01.jpg'), ('file2', u'stims/face02.jpg'), ('file3', u'stims/face03.jpg')]),
      OrderedDict([('file1', u'stims/house01.jpg'), ('file2', u'stims/house02.jpg'), ('file3', u'stims/house03.jpg')])]
    Routine trial
  LoopTerminator trials
