PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = pix
  Window size (pixels) = [1024,768]
  Full-screen window = False
  expName = dragDropMouse
  Screen = 1
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Routines
  Routine trial
    CodeComponent dragDrop
      End Routine:
        thisExp.addData('image_1.x', image_1.pos[0])
        thisExp.addData('image_1.y', image_1.pos[1])

        thisExp.addData('image_2.x', image_2.pos[0])
        thisExp.addData('image_2.y', image_2.pos[1])

        thisExp.addData('image_3.x', image_3.pos[0])
        thisExp.addData('image_3.y', image_3.pos[1])
      Each Frame:
        if image_1.contains(mouse) and sum(mouse.getPressed()):
            image_1.pos = mouse.getPos()

        elif image_2.contains(mouse) and sum(mouse.getPressed()):
            image_2.pos = mouse.getPos()

        elif image_3.contains(mouse) and sum(mouse.getPressed()):
            image_3.pos = mouse.getPos()
    ImageComponent image_1
      pos [set every repeat] = (-250, 0)
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $file1
      size = (200,200)
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    ImageComponent image_2
      pos [set every repeat] = (0, 0)
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $file2
      size = (200,200)
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    ImageComponent image_3
      pos [set every repeat] = (+250, 0)
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $file3
      size = (200,200)
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    MouseComponent mouse
      timeRelativeTo = routine
      forceEndRoutineOnPress = never
      startVal [time (s)] = 0.0
      saveMouseState = final
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    TextComponent instruct
      pos = (0, -200)
      startVal [time (s)] = 0.0
      letterHeight = 30
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      text:
        You can move the images around with the mouse

        Press space to move on to next trial
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('file1', u'stims/face01.jpg'), ('file2', u'stims/face02.jpg'), ('file3', u'stims/face03.jpg')]),
      OrderedDict([('file1', u'stims/house01.jpg'), ('file2', u'stims/house02.jpg'), ('file3', u'stims/house03.jpg')])]
    Routine trial
  LoopTerminator trials
